PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': 'please_write_random_letters_and_numbers_here', 'your_age': '', 'your_gender': 'Female, Male, Other'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/-After.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/-Anyone.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/-Battered.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/-Berkah.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/-But.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/-He.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/-Her.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/-Observing.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/-On.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/-She.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/-The.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/-These.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/-They.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/-When.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-Af**ter.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-Aft**er.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-An**yone.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-Anyo**ne.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-B**ut.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-Ba**ttered.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-Batter**ed.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-Be**rkah.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-Berk**ah.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-Bu**t.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-Edi**th.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-H**e.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-H**er.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-He**r.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-O**n.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-Ob**serving.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-Observi**ng.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-S**he.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-Sh**e.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-T**he.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-T**hey.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-Th**e.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-Th**ese.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-The**se.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-The**y.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-W**hen.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**-Whe**n.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**1**984..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**4**,.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**198**4..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**a**.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**a**n.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**a**nd.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**a**s.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**a**t.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ad**vance.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**advan**ce.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**Ae**gean.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**Aege**an.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**al**ong.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**alo**ng.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**an**d.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ap**peared.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**appear**ed.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ar**duous.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ar**mful.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ar**rived.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**arduo**us.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**armf**ul.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**arriv**ed.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**aw**ake.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**awa**ke.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**b**een.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**b**ig.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**b**lue.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**b**usy.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**b**ut.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ba**dly.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ba**ngles.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ba**seball.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**Ba**ttered.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bad**ly.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bangl**es.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**baseba**ll.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**be**aten.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**be**auty.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**be**came.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**be**ing.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**be**neath.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**beat**en.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**beau**ty.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**beca**me.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bee**n.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bei**ng.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**benea**th.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**Berk**ah.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bi**g.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**blu**e.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bo**rowed.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bo**rrowed.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bo**ulders,.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**borrow**ed.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**boulde**rs,.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**br**eeze..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**br**ighter.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**br**uised,.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bre**athless..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**breathle**ss..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bree**ze..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bright**er.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bruis**ed,.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bu**shes,.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bu**shes.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bu**t.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bus**y.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**bush**es,.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**c**are.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**C**Ds.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**c**lub.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**c**oat.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ca**refree..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ca**refree.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ca**tching.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**car**e.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**carefr**ee..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**catchi**ng.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**CD**s.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ch**air..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ch**ildren.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**cha**ir..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**childr**en.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**cl**othes..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**cl**oudless.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**cloth**es..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**cloudle**ss.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**clu**b.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**co-**workers.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**co-worke**rs.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**co**llected.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**co**lor.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**co**lorful.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**co**mings.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**co**uld.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**co**uple,.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**coa**t.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**col**or.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**collect**ed.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**colorf**ul.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**com**bination.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**combinati**on.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**comin**gs.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**cou**ld.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**coup**le,.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**cr**awling.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**cr**ossed.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**cr**uise.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**craw**ling.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**crawli**ng.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**cross**ed.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**crui**se.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**d**awn..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**d**ay.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**d**ays,.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**d**ays.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**d**og.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**d**own.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**d**ust.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**da**nce.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**da**y.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**dan**ce.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**daw**n..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**day**s,.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**day**s.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**de**licious.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**delicio**us.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**des**tination..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**destinati**on..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**det**ermined..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**determin**ed..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**determin**ed.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**dis**gruntled.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**dis**infectant.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**disgruntl**ed.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**disinfecta**nt.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**do**g.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**do**tted.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**do**wntown.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**dott**ed.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**dow**n.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**downto**wn.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**dr**agging.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**dr**essing.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**draggi**ng.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**dressi**ng.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**dus**t.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**e**ven.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**e**ye.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**e**yes.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**Ed**ith.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**Edi**th.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ef**fective.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**effecti**ve.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ei**ghties.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**eighti**es.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**el**derly.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**elder**ly.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**en**sure.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ensu**re.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**er**ect.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ere**ct.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ev**eryone.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**eve**n.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**eve**rything.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**everyo**ne.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**everythi**ng.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ey**e.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**eye**s.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**f**lew.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**f**ood.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**f**or.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**f**ort..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**f**rom.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**fi**nally.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**final**ly.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**fle**w.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**flu**orescent.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**fluoresce**nt.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**fo**lding.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**fo**r.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**foldi**ng.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**foo**d.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**for**t..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**fr**esh.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**Fr**iday.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**fr**iendly.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**fr**ocks.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**fr**ont.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**fre**sh.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**Frid**ay.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**friend**ly.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**fro**m.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**fro**nt.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**froc**ks.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**fu**rther,.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**fu**ture.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**furth**er,.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**futu**re.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**g**irl.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**g**own,.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**ga**rden.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**gard**en.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**gir**l.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**go**ing.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**go**ings.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**goi**ng.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**goin**gs.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**gow**n,.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**gr**ass..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**gr**ound.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**gra**ss..png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**gra**tefully.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/**grateful**ly.png', '/Users/mies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okumenter/AU/reading_exp_final/resources/working.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/would.png', '/Users/miesogaard/Dokumenter/AU/reading_exp_final/resources/young.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = reading_exp_final
  logging level = debug
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Routines
  Routine welcomeScreen
    TextComponent text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In a moment, you will be presented to a short story, one word at a time.
        When you have read the word on the screen, press the space-button immediately.
        Continue doing this until the story has finished.

        After the story, you have to answer a few questions.

        This procedure will repeat five times.

        Press the space-button when you are ready to start reading...
    KeyboardComponent key_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initCode
    CodeComponent code
      Code Type = Both
      Before JS Experiment:
        psychoJS.serverManager.prepareResources([ {
            'name': story_1_control.xlsx, 'path': resources+'/'+story_1_control.xlsx, 'download': true,
            'name': story_1_hfhs.xlsx, 'path': resources+'/'+story_1_hfhs.xlsx, 'download': true,
            'name': story_1_hfls.xlsx, 'path': resources+'/'+story_1_hfls.xlsx, 'download': true,
            'name': story_1_lfhs.xlsx, 'path': resources+'/'+story_1_lfhs.xlsx, 'download': true,
            'name': story_1_lfls.xlsx, 'path': resources+'/'+story_1_lfls.xlsx, 'download': true,
            'name': story_2_control.xlsx, 'path': resources+'/'+story_2_control.xlsx, 'download': true,
            'name': story_2_hfhs.xlsx, 'path': resources+'/'+story_2_hfhs.xlsx, 'download': true,
            'name': story_2_hfls.xlsx, 'path': resources+'/'+story_2_hfls.xlsx, 'download': true,
            'name': story_2_lfhs.xlsx, 'path': resources+'/'+story_2_lfhs.xlsx, 'download': true,
            'name': story_2_lfls.xlsx, 'path': resources+'/'+story_2_lfls.xlsx, 'download': true,
            'name': story_3_control.xlsx, 'path': resources+'/'+story_3_control.xlsx, 'download': true,
            'name': story_3_hfhs.xlsx, 'path': resources+'/'+story_3_hfhs.xlsx, 'download': true,
            'name': story_3_hfls.xlsx, 'path': resources+'/'+story_3_hfls.xlsx, 'download': true,
            'name': story_3_lfhs.xlsx, 'path': resources+'/'+story_3_lfhs.xlsx, 'download': true,
            'name': story_3_lfls.xlsx, 'path': resources+'/'+story_3_lfls.xlsx, 'download': true,
            'name': story_4_control.xlsx, 'path': resources+'/'+story_4_control.xlsx, 'download': true,
            'name': story_4_hfhs.xlsx, 'path': resources+'/'+story_4_hfhs.xlsx, 'download': true,
            'name': story_4_hfls.xlsx, 'path': resources+'/'+story_4_hfls.xlsx, 'download': true,
            'name': story_4_lfhs.xlsx, 'path': resources+'/'+story_4_lfhs.xlsx, 'download': true,
            'name': story_4_lfls.xlsx, 'path': resources+'/'+story_4_lfls.xlsx, 'download': true,
            'name': story_5_control.xlsx, 'path': resources+'/'+story_5_control.xlsx, 'download': true,
            'name': story_5_hfhs.xlsx, 'path': resources+'/'+story_5_hfhs.xlsx, 'download': true,
            'name': story_5_hfls.xlsx, 'path': resources+'/'+story_5_hfls.xlsx, 'download': true,
            'name': story_5_lfhs.xlsx, 'path': resources+'/'+story_5_lfhs.xlsx, 'download': true,
            'name': story_5_lfls.xlsx, 'path': resources+'/'+story_5_lfls.xlsx, 'download': true }
        ]);
      Begin Experiment:
        import random

        story = ["story_1", "story_2", "story_3", "story_4", "story_5"]
        dif_condition = ["_hfhs.xlsx", "_lfhs.xlsx", "_lfls.xlsx", "_hfls.xlsx", "_control.xlsx"]

        random.shuffle(story)
        random.shuffle(dif_condition)

        selected_condition = ["", "", "", "", ""]

        for i in range(0, 5):
            selected_condition[i] = 'resources/' + story[i] + dif_condition[i]

        count = 0
        count_extra = count
        this_condition = selected_condition[0]

        text_element = "You have now answered all the questions to the story. \n\n Now, you will have to read the next story. \n\n Press the space-button when you are ready to continue."
      Begin JS Experiment:
        function shuffle(a) {
            var j, x, i;
            for (i = a.length - 1; i > 0; i--) {
                j = Math.floor(Math.random() * (i + 1));
                x = a[i];
                a[i] = a[j];
                a[j] = x;
            }
            return a;
        }

        story = ["story_1", "story_2", "story_3", "story_4", "story_5"];
        dif_condition = ["_hfhs.xlsx", "_lfhs.xlsx", "_lfls.xlsx", "_hfls.xlsx", "_control.xlsx"];

        shuffle(story)
        shuffle(dif_condition)

        selected_condition = ["", "", "", "", ""];

        for (var i = 0, _pj_a = 5; (i < _pj_a); i += 1) {
            selected_condition[i] = (("resources/" + story[i]) + dif_condition[i]);
        }
        count = 0;
        count_extra = count;

        this_condition = selected_condition[0];

        text_element = "You have now answered all the questions to the story. \n\n Now, you will have to read the next story. \n\n Press the space-button when you are ready to continue.";
  Routine showQuestions
    ImageComponent question_image
      image [set every repeat] = $questions
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent question_resp
      allowedKeys = '1','2','3','4'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine showStory
    ImageComponent stimuli
      image [set every repeat] = $words
      size = (1, 0.6)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_respone_stimuli
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine newHello
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Hello!
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    KeyboardComponent key_resp_3
      allowedKeys = 'space', '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine showStory_2
    ImageComponent story_image
      image [set every repeat] = $words
      size = (1, 0.6)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent word_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine extraCode
    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        count = count + 1
        count_extra = count

        if count > 4:
            count = 4

        if count == 4:
            text_element = "Dette var den sidste historie, og eksperimentet er nu slut. \n\n Tak for din deltagelse! \n\n OM EKSPERIMENTET: \n Dette projekt tager udgangspunkt i læseværktøjet “Bionic Reading”, som er et værktøj, der på baggrund af en algoritme konvertere en tekst, så dele af ord i en tekst er fremhævet. Dette eksperiment er med til at undersøge, hvorvidt dette værktøj påvirker læsehastighed og læseforståelse. \n\n Tryk på mellemrumstasten for at afslutte eksperimentet. \n\n Vent venligst med at afslutte fuldsskærmsvisning, indtil beskeden på skærmen bekræfter, at data er gemt."

        this_condition = selected_condition[count]
  Routine consentForm
    TextComponent text_4
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Dette er samtykkeerklæringen for dette eksperiment, som er en del af et Bachelorprojekt på Cognitive Science-uddannelsen på Aarhus Universitet.

        Forventet tid for gennemførelse: 10-15 minutter

        Hvis du har spørgsmål, kontakt venligst den ansvarlige for dette projekt:
        Mie Buchhave Ryborg, 202004812@post.au.dk

        For at deltage i dette eksperiment, skal du opfylde følgende krav:
        - Have normalt/korrigeret syn (du må godt bruge briller eller kontaktlinser)
        - Have dansk som modersmål

        Det brede fokus i dette bachelorprojekt er at undersøge læsning og forståelse af tekstmateriale. Den specifikke hypotese vil først blive fremlagt efter eksperimentet er færdigt, eftersom det muligvis vil kunne have indflydelse på resultaterne.

        Deltagelse i eksperimentet er frivilligt, og du er fri til at afbryde eksperimentet på et hvilket som helst tidspunkt. Dette gøres ved at trykke på “escape”-knappen på computeren og derefter lukke fanen. Al data indtil dette punkt vil blive slettet omgående. Vær opmærksom dog på, at du ikke kan deltage og fuldføre eksperimentet på et senere tidspunkt, hvis du vælger at afbryde.

        Da din data er anonymiseret, vil det ikke være muligt at identificere dig. Dette betyder også, at det ikke vil være muligt at slette din data, efter at eksperimentet er afsluttet.

        Data vil blive gemt på en server via Pavlovia (pavlovia.org) samt i eksperimentets GitLab repositorium. Data vil derudover blive processeret lokalt på den ansvarliges egen computer. Al data vil blive slettet, når projektet er blevet evalueret i slutningen af januar 2023.

        Ved at trykke på “J” på dit tastatur erklærer du dig enig i at have læst og forstået denne samtykkeerklæring.
    KeyboardComponent agree_resp
      allowedKeys = ['j']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine firstWelcome
    TextComponent danish_welcome
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Velkommen til dette eksperiment!

        Venligst fortsæt eksperimentet i fuldskærmsvisning.
        Når eksperimentet er afsluttet, vent med at gøre noget indtil en besked på skærmen bekræfter, at data er blevet gemt.


        Tryk på mellemrumstasten for at læse samtykkeerklæringen.
    KeyboardComponent welcome_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine afterQuestions
    TextComponent text_5
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_element
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    KeyboardComponent key_resp_5
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine afterStory
    TextComponent text_3
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        The story is now finished.

        Now, you will have to answer some questions about the story.
        There will be four answers, where one of them is correct.

        Press the corresponding number on your keyboard (1, 2, 3 or 4) that you think is the right answer.

        Press "enter" to read the first question.
    KeyboardComponent key_resp_4
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine showGoodbye
    TextComponent text_6
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        The experiment is now done. Thank you for your participation!

        Press the “space” button to exit the experiment, but please do not close the browser window before you get a confirmation about your data being saved.
    KeyboardComponent exit_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine firstCode
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if count == 4:
            text_element = "This was the last story"
  Routine fixation
    TextComponent text_7
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine confirmationForm
    TextComponent confirmation_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Du har nu bekræftet samtykkeerklæringen.


        Da eksperimentet foregår på engelsk, vil resten af eksperimentet nu også skifte til engelsk.

        Tryk på mellemrumstasten for at fortsætte til introduktionen.
    KeyboardComponent conf_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine showDebriefing
    TextComponent debriefText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        OM EKSPERIMENTET:

        Dette projekt tager udgangspunkt i læseværktøjet “Bionic Reading”, som er et værktøj, der på baggrund af en algoritme konvertere en tekst, så dele af ord i en tekst er fremhævet.

        Dette eksperiment er med til at undersøge, hvorvidt dette værktøj påvirker læsehastighed og læseforståelse.
Flow
  Routine initCode
  Routine firstWelcome
  Routine consentForm
  Routine confirmationForm
  Routine welcomeScreen
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = resources/condition_1.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      Selected rows = 4:
      conditionsFile = $this_condition
      loopType = sequential
      nReps = 1
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      Routine showStory_2
    LoopTerminator trials
    Routine afterStory
    LoopInitiator questionsLoop loopType="TrialHandler"
      Selected rows = 0:4
      conditionsFile = $this_condition
      loopType = random
      nReps = 1
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      Routine fixation
      Routine showQuestions
    LoopTerminator questionsLoop
    Routine afterQuestions
    Routine extraCode
  LoopTerminator trials_2
